PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = maxForce
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine countdown
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    ApparatusLEDComponent countdown_led plugin="psychopy-apparatus"
      deviceLabel = apparatus
      holeColor = black
      holes = 'none'
      startVal [time (s)] = 0
      syncScreenRefresh = False
      turnOffOnRoutineEnd = False
      turnOffOnStop = False
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    CodeComponent countdown_code
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy.colors import Color

        # Countdown configuration
        countdown_holes = list(range(8))  # Outer holes (8-20)
        countdown_current_index = len(countdown_holes)  # Start with all lights on
        countdown_last_update = None
        countdown_interval = 0.5  # Update every 0.5 seconds

        # Turn on all outer lights initially
        if countdown_current_index > 0:
            active_holes = countdown_holes[:countdown_current_index]
            countdown_led.setHoleLights(active_holes, Color('white'))
      Each Frame:
        # Check if it's time to update the countdown
        if countdown_last_update is None:
            countdown_last_update = t  # t is the routine timer

        if t - countdown_last_update >= countdown_interval:
            # Decrease the number of active lights
            countdown_current_index -= 1
            countdown_last_update = t

            if countdown_current_index > 0:
                # Turn on the remaining lights
                active_holes = countdown_holes[:countdown_current_index]
                countdown_led.setHoleLights(active_holes, Color('white'))
                # Turn off the rest
                inactive_holes = countdown_holes[countdown_current_index:]
                countdown_led.turnOffHoleLights(inactive_holes)
            else:
                # All lights off
                countdown_led.turnOffHoleLights('outer')
                continueRoutine = False
    TextComponent countdown_text
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every frame] = $countdown_current_index
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  Routine mvc
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    ApparatusLEDComponent led_mvc plugin="psychopy-apparatus"
      deviceLabel = apparatus
      holeColor = white
      holes = 'all'
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
      turnOffOnRoutineEnd = True
      turnOffOnStop = True
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    ApparatusForceComponent apparatusForce plugin="psychopy-apparatus"
      device = white
      deviceLabel = apparatus
      endRoutineOnResponse = False
      rate = 50
      rawDataId = "test"
      saveRawData = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        mvc_max_experimental = 0
      Begin Routine:
        mvc_max_trial = 0
      Each Frame:
        if apparatusForce.maxWhiteForce > mvc_max_trial:
            mvc_max_trial = apparatusForce.maxWhiteForce

        if mvc_trial_type == "experimental":
            if mvc_max_trial > mvc_max_experimental:
                mvc_max_experimental = mvc_max_trial
      End Routine:
        print(f"Maximum force across all experimental trials: {mvc_max_experimental}")
    KeyboardComponent mvc_keyboard
      allowedKeys = 'y','n','left','right','space'
      durationEstim = 45
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = mvc_trial_duration
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
      text [set every frame] = $f"Trial Type: {mvc_trial_type}\n\nForce: {apparatusForce.whiteForce}\n\nMax Experimental: {mvc_max_experimental}"
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  Routine target_presentation
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  Routine task
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    ApparatusReedComponent apparatusReed plugin="psychopy-apparatus"
      endRoutineOnResponse = False
      holes = 'all'
      rate = 100
      syncScreenRefresh = False
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  Routine slider
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  Routine pause
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  Routine setup
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    CodeComponent code
      Code Type = Auto->JS
      Before Experiment:
        # deltaE function here
Flow
  Routine setup
  LoopInitiator loop_mvc_block loopType="TrialHandler"
    conditionsFile = mvc_block.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'mvc_trial_type': 'practice', 'mvc_trial_nrepeat': 1, 'mvc_trial_duration': 450},
      {'mvc_trial_type': 'experimental', 'mvc_trial_nrepeat': 3, 'mvc_trial_duration': 45}]
    LoopInitiator loop_mvc_trial loopType="TrialHandler"
      loopType = sequential
      nReps = mvc_trial_nrepeat
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      conditions:
        [{'mvc_trial_nrepeat': 1, 'mvc_trial_duration': None},
        {'mvc_trial_nrepeat': 3, 'mvc_trial_duration': 45}]
      Routine countdown
      Routine mvc
    LoopTerminator loop_mvc_trial
  LoopTerminator loop_mvc_block
  LoopInitiator loop_block loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator loop_difficulty loopType="TrialHandler"
      loopType = random
      nReps = 6
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      Routine target_presentation
      LoopInitiator loop_palette loopType="TrialHandler"
        loopType = random
        nReps = 24
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        Routine task
      LoopTerminator loop_palette
      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = random
        nReps = 2
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        Routine slider
      LoopTerminator trials_2
    LoopTerminator loop_difficulty
    Routine pause
  LoopTerminator loop_block
